CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "RED")
    Name to assign these images:DsRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:eGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

Threshold:[module_num:5|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
    Select the input image:DsRed
    Name the output image:RedforMask
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:.3
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.0
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
Morph:[module_num:6|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
    Select the input image:RedforMask
    Name the output image:RedDilated
    Select the operation to perform:thicken
    Number of times to repeat operation:Once
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
MaskImage:[module_num:7|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
    Select the input image:eGFP
    Name the output image:MaskedGFP
    Use objects or an image as a mask?:Image
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    Select image for mask:RedDilated
    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:MaskedGFP
    Name the output image:GFPFiltered
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow

Threshold:[module_num:9|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
    Select the input image:DsRed
    Name the output image:RedforCelldeath
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GFPFiltered
    Name the primary objects to be identified:Puncta
    Typical diameter of objects, in pixel units (Min,Max):4,11
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:RedforCelldeath
    Name the primary objects to be identified:Particlesforcelldeath
    Typical diameter of objects, in pixel units (Min,Max):1,10000000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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