Journal
Description: Before running the journal pixel area should be classified at 8 to 80 pixels under Integrated Morphometry Analysis.  Checking a measuring option will give the number of objects counted in the Integrated Morphometry Analysis window when the journal is finished running.
Version VersionNumber=2.4
Comment: Separate color channels and create maximum z-projection.  Also assigns the original filename to a variable.
Assign Variable
  orgImage = Image.name
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 25 point0000_seq0000B02_0000
  imDest = "green"
  nPlanes = 27
  bSelectedPlanes = TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE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
  Action = 2
Set LUT Model
  imSrc = m 1 7 10 0 1 2 0 8 Untitled
  nLutModel = 3
Keep Planes
  imSource = m 1 5 10 0 1 -1 -1 25 point0000_seq0000B02_0000
  imDest = "red"
  nPlanes = 27
  bSelectedPlanes = FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE FALSE TRUE FALSE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
  Action = 2
Set LUT Model
  imSrc = m 1 7 10 0 1 4 0 10 Untitled-2
  nLutModel = 2
Close
  im = m 1 5 9 0 1 -1 -1 5 Jw001
  bSaveIt = FALSE
Stack Arithmetic
  iOperation = 3
  imStack = m 1 7 10 0 1 2 0 3 Red
  imResult = "Maximum"
Assign Variable
  Image.Name = orgImage+" GreenMaximum"
Show Region Statistics
  stPosnFormat = "#.##"
  stGrayFormat = "#.##"
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Assign Variable
  EntireGreenAverage = ShowRegionStatistics.Average
Assign Variable
  EntireGreenStDeviation = ShowRegionStatistics.StandardDeviation
Close
  im = m 1 7 9 0 1 2 0 3 Red
  bSaveIt = FALSE
Set LUT Model
  imSrc = m 1 3 9 0 1 -1 -1 7 Maximum
  nLutModel = 3
Stack Arithmetic
  iOperation = 3
  imStack = m 1 7 10 0 1 4 0 5 Green
  imResult = "Maximum"
Disabled Scale Image
  imSource = m 1 3 10 0 1 -1 -1 8 Untitled
  range = 5
  autoScale = FALSE
  low = 1004
  high = 1614
  autolo = 0
  autohi = 5.15
  bRedAutoScale = TRUE
  wRedLowScale = 1004
  wRedHighScale = 1614
  dpRedLowPercent = 0
  dpRedHighPercent = 0
  bGreenAutoScale = TRUE
  wGreenLowScale = 1004
  wGreenHighScale = 1614
  dpGreenLowPercent = 0
  dpGreenHighPercent = 0
  bBlueAutoScale = TRUE
  wBlueLowScale = 1004
  wBlueHighScale = 1614
  dpBlueLowPercent = 0
  dpBlueHighPercent = 0
  bScaleROI = FALSE
Assign Variable
  Image.Name = orgImage+" RedMaximum"
Show Region Statistics
  stPosnFormat = "#.##"
  stGrayFormat = "#.##"
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = TRUE
  channel = 2
Assign Variable
  EntireRedAverage = ShowRegionStatistics.Average
Assign Variable
  EntireRedStDeviation = ShowRegionStatistics.StandardDeviation
Set LUT Model
  imSrc = m 1 3 9 0 1 -1 -1 9 Maximum-2
  nLutModel = 2
Close
  im = m 1 7 9 0 1 4 0 5 Green
  bSaveIt = FALSE
Comment: Create mask using DsRed maximum z-projection.  Assign variables for threshold minimum based upon region statistics
Show Region Statistics
  stPosnFormat = "#.##"
  stGrayFormat = "#.##"
  im = m 1 3 9 0 1 -1 -1 7 Maximum
  bUseThreshold = TRUE
  bEntireImage = TRUE
  channel = 2
Assign Variable
  Image.ThreshMax = 65535
Assign Variable
  Image.ThreshState = 1
Assign Variable
  Image.ThreshMin = (ShowRegionStatistics.Average+ ShowRegionStatistics.StandardDeviation)*0.25
Show Region Statistics
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = TRUE
  bEntireImage = TRUE
  channel = 2
Assign Variable
  RedThresholdMin = ShowRegionStatistics.ThresholdedArea
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Threshold minimum"
  stMessage = "Threshold Minimum: %Image.ThreshMin%"
  msgX = 621
  msgY = 211
Comment: Command 14 binarizes the image based upon thesholding variables.  "Open" and "Dilate" are used in preparing the mask for the AND operation.  The user is also able to filter out larger debris manually.
Binary
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "1-bit binary"
  bUseThresholdVars = FALSE
  nThresholdState = 1
  uThresholdMin = 0
  uThresholdMax = 65535
Assign Variable
  Image.Name = orgImage+" 1-Bit Binary"
Morphological Open
  imSrcIm = m 1 3 9 0 1 -1 -1 8 Untitled
  imDestIm = "Open"
  nShapeSize = 5
  nShape = 4
  bUseRecon = FALSE
Assign Variable
  Image.Name = orgImage+" Open"
Dilate Image
  imSource = m 1 3 9 0 1 -1 -1 4 Open
  imDest = "Dilate"
  nThresh = 1
  cRepeat = 1
  bDilateWithoutClose = FALSE
Assign Variable
  Image.Name = orgImage+" Dilate"
Dilate Image
  imSource = m 1 3 9 0 1 -1 -1 6 Dilate
  imDest = "Dilate"
  nThresh = 1
  cRepeat = 1
  bDilateWithoutClose = FALSE
Assign Variable
  Image.Name = orgImage+" Dilate"
Disabled Create Region
  nRgnType = 1
  nX1 = 10
  nY1 = 10
  nX2 = 20
  nY2 = 20
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Remove Debris"
  stMessage = "To remove large debris, copy region to clip board and paste region from clip board on debris. "
  msgX = 621
  msgY = 211
Disabled Clear Regions
  clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: Mask GFP image and apply Top Hat filter.  Threshold the image to exclude zero pixels.  Then assign new thresholding values based upon all non-zero pixels
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 16
  imSource1 = m 1 3 9 0 1 -1 -1 8 Dilate-2
  imSource2 = m 1 7 9 0 1 7 0 7 Maximum
  imDest = "AND"
Assign Variable
  Image.Name = orgImage+" AND"
Morphological Top Hat
  imSrcIm = m 1 3 9 0 1 -1 -1 3 AND
  imDestIm = "Top Hat"
  nShapeSize = 80
  nShape = 4
  bUseRecon = FALSE
Assign Variable
  Image.Name = orgImage+" Top Hat"
Threshold Image
  srcThresh = m 1 3 9 0 1 -1 -1 8 Untitled
  min = 1
  max = 65535
  bMore = FALSE
  idxState = 1
  nTab = 1
  nMinMaxRange = 1
  bTransparentThresh = FALSE
  dTransparencyPct = 0.5
  byThreshRed = 255
  byThreshGreen = 128
  byThreshBlue = 64
  nThreshDisplayMode = 1
Show Region Statistics
  stPosnFormat = "#.##"
  stGrayFormat = "#.##"
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bUseThreshold = TRUE
  bEntireImage = TRUE
  channel = 2
Set LUT Model
  imSrc = m 1 3 9 0 1 -1 -1 7 Top Hat
  nLutModel = 3
Assign Variable
  Image.ThreshMax = 65535
Assign Variable
  Image.ThreshState = 1
Assign Variable
  Image.ThreshMin = ShowRegionStatistics.Average+ 1.5*ShowRegionStatistics.StandardDeviation
Assign Variable
  GreenHatAverage = ShowRegionStatistics.Average
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Threshold minimum"
  stMessage = "Threshold Minimum: %Image.ThreshMin%"
  msgX = 621
  msgY = 211
Comment: Command 30 binarizes the GFP-mask image based upon the calculated threshold values.  Puncta with areas between 8 and 80 are then measured.
Binary
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "1-bit binary"
  bUseThresholdVars = FALSE
  nThresholdState = 1
  uThresholdMin = 0
  uThresholdMax = 65535
Assign Variable
  Image.Name = orgImage+" 1-Bit Binary"
Integrated Morphometry - Measure
  imSource = m 1 3 9 0 1 -1 -1 12 1-Bit Binary
  nColor = -1
  imMask = m 1 2 9 2 1 -1 -1 8 Untitled
  bMeasureUsingMask = FALSE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Create Regions Around Objects
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: Labels PSDs
Transfer Regions
  imSourceImage = m 1 7 9 0 1 52 0 12 1-Bit Binary
  imDestImage = m 1 7 9 0 1 7 0 8 Untitled
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Disabled Log Variable
  nLogType = 1
  stVariable = "orgImage"
  bOneLine = FALSE
  bLogHeader = FALSE
Region Measurements
  imSource = m 1 2 9 2 1 -1 -1 8 Untitled
  nSelectorPlane = 9
  nTab = 0
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 12
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 0
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE
Disabled New
  nWidth = 1024
  nHeight = 1024
  nDepth = 1
  nGray = 1
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Disabled Transfer Regions
  imSourceImage = m 1 7 9 0 1 52 0 12 1-Bit Binary
  imDestImage = m 1 3 9 0 1 -1 -1 8 Untitled
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Disabled Loop for all Regions
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  stJournalName = "C:\MM\app\mmproc\journals\PaintRegion.jnl"
Disabled Clear Regions
  clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Disabled Erode Image
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  imDest = "Erode"
  nThresh = 1
  cRepeat = 1
  bKeepLastPixel = FALSE
Disabled Erode Image
  imSource = m 1 3 9 0 1 -1 -1 5 Erode
  imDest = "Erode"
  nThresh = 1
  cRepeat = 1
  bKeepLastPixel = FALSE
Disabled Erode Image
  imSource = m 1 3 9 0 1 -1 -1 5 Erode
  imDest = "Erode"
  nThresh = 1
  cRepeat = 1
  bKeepLastPixel = FALSE
Disabled Erode Image
  imSource = m 1 3 9 0 1 -1 -1 5 Erode
  imDest = "Erode"
  nThresh = 1
  cRepeat = 1
  bKeepLastPixel = FALSE
Disabled Invert
  imSource = m 1 3 9 0 1 -1 -1 7 Erode-2
  imDest = "Invert"
Disabled Arithmetic
  iOperation = 3
  iSecondSource = 2
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 8
  imSource1 = m 1 3 9 0 1 -1 -1 8 Untitled
  imSource2 = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "Multiply"
Disabled Set LUT Model
  imSrc = m 1 3 10 0 1 -1 -1 8 Multiply
  nLutModel = 3
Disabled Copy to 8-bit Image
  imSource = m 1 7 9 0 1 14 0 8 Untitled
  imDest = "8-Bit Copy"
  bXferName = FALSE
  bCopyEntireStack = FALSE
Disabled Arithmetic
  iOperation = 2
  iSecondSource = 1
  nNumerator = 0
  nDenominator = 1
  nResultDepth = 8
  imSource1 = m 1 3 9 0 1 -1 -1 10 Arithmetic
  imSource2 = m 1 7 9 0 1 69 0 10 Arithmetic
  imDest = "Arithmetic"
Disabled Color Combine
  imRed = m 1 7 9 0 1 72 0 8 Subtract
  imGreen = m 1 7 9 0 1 69 0 8 Multiply
  imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "Color Combine"
  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
  bColorEncode = FALSE
  nSource = 1
  nResultDepth = 2
  bHueRendering = FALSE
Disabled Assign Variable
  Image.Name = orgImage+" Color Combine"
Comment: NEW:  Closes images used for labeling PSDs and optionally logs the final data.
Disabled Close
  im = m 1 7 9 0 1 72 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 68 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 67 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 66 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 65 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 64 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 60 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 69 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 52 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 42 0 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = m 1 7 9 0 1 71 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 40 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 35 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 33 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 31 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 29 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 14 0 8 Untitled
  bSaveIt = FALSE
Close
  im = m 1 7 9 0 1 7 0 8 Untitled
  bSaveIt = FALSE
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Threshold minimum"
  stMessage = "Press cancel if you do not wish to log the data."
  msgX = 621
  msgY = 211
Disabled Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Disabled Set Logging Row and Column
  nLogType = 4
  bAbsoluteRowMode = TRUE
  bAbsoluteColMode = TRUE
  nRow = 1
  nCol = 25
  nRowOffset = 0
  nColOffset = 0
  bSetAnchorCol = TRUE
  bRefFromLastPos = TRUE
Log Variable
  nLogType = 4
  stVariable = "EntireRedAverage"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 4
  stVariable = "EntireRedStDeviation"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 4
  stVariable = "EntireGreenAverage"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 4
  stVariable = "EntireGreenStDeviation"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 4
  stVariable = "GreenHatAverage"
  bOneLine = TRUE
  bLogHeader = FALSE
Log Variable
  nLogType = 4
  stVariable = "RedThresholdMin"
  bOneLine = TRUE
  bLogHeader = FALSE
Assign Variable
  Image.FilePath = "C:\Users\Thayer Lab\Desktop\Jobs_Analysis_Batch\Puncta-Overlays\"+ orgImage+"PunctaOverlay"+".tif"
Disabled Save
  imSave = m 1 7 9 0 1 73 0 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 7 9 0 1 73 0 8 Untitled
  bSaveIt = FALSE
